PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['Task'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'Task': '["1 - without skip", "2 - with skip"]', 'Dot Ratio': '["60:40, 57:43", "57:43, 54:46", "54:46, 52:48"]', 'Deadline': '["2.5s, 2.0s", "2.0s, 1.5s", "1.5s, 1.0s"]'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Rewa's Exp
  keyboardBackend = ioHub
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Routines
  Routine Dots_Show_6040
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Get the value of a parameter from the loop
        #correct_answer = current_trial['correct']
        #print('correct_answer',correct_answer)


        if flag_6040 == False:
            continueRoutine = False

        # Get the duration of each loop
        #Dotsshowstart=timer.getTime()
      Each Frame:
        #if response.keys == str(correct_answer) or response.keys == correct_answer:
        #     response.corr = 1
        #     continueRoutine = False
        #elif len(response.keys)>1:
        #    response.corr = -2
        #    continueRoutine = False

        if len(response.keys)>1:
            continueRoutine = False

        if str(expInfo['Task']) == "2 - with skip":
            if key_skip.keys == "space":
                continueRoutine = False

        if movie.status == STARTED and logged == 0:
            Videoshowstart=timer.getTime()
            logged = 1
      End Routine:
        #DotsshowRT = timer.getTime()-Dotsshowstart
        Videoshowstop=timer.getTime()
        VideoshowRT=Videoshowstop- Videoshowstart

        #thisExp.addData('DotsshowRT', DotsshowRT)
        thisExp.addData('Videoshowstart', Videoshowstart)
        thisExp.addData('Videoshowstop', Videoshowstop)
        thisExp.addData('VideoshowRT', VideoshowRT)

        logged = 0


        # For Feedback Page
        if flag_6040 == True:
            if key_skip.keys=="space":
                feedback_txt = 'Skipped 0'
                feedback_col = [1,1,1]
                current_score = 0
            elif response.keys is None or len(response.keys) < 1:
                feedback_txt = 'Too late -2'
                feedback_col = [1.0000, -1.0000, -1.0000]
                total_score -= 2
                current_score = -2
            elif response.corr == 1:
                feedback_txt = 'Correct +1'
                feedback_col = [1,1,1]
                total_score += 1
                current_score = 1
            elif response.corr == 0:
                feedback_txt = 'Incorrect -2'
                feedback_col = [1.0000, -1.0000, -1.0000]
                total_score -= 2
                current_score = -2
    PolygonComponent polygon
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent dots_60
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 60
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_40
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 40
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys = 'right','left'
      correctAns = $correct
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Right
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Left
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_skip
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine score
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $total_score
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    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        text_2.text = str(total_score)
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Your total score is: 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Press Spacebar to continue
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  Routine output
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        from excel_analyser_rewa import *

        result=''

        try:
            result = analyze_excel_data()

        except:
            pass
      Each Frame:
        text_4.text = str(result)
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine output_2
  Routine Dots_Show_5743
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # Get the value of a parameter from the loop
        #correct_answer = current_trial['correct']
        #print('correct_answer',correct_answer)

        if flag_5743 == False:
            continueRoutine = False

        # Get the duration of each loop
        Dotsshowstart=timer.getTime()
      Each Frame:
        #if response.keys == str(correct_answer) or response.keys == correct_answer:
        #     response.corr = 1
        #     continueRoutine = False
        #elif len(response.keys)>1:
        #    response.corr = -2
        #    continueRoutine = False

        if len(response_2.keys)>1:
            continueRoutine = False

        if str(expInfo['Task']) == "2 - with skip":
            if key_skip_2.keys == "space":
                continueRoutine = False

        if movie_2.status == STARTED and logged == 0:
            Videoshowstart=timer.getTime()
            logged = 1
      End Routine:
        #DotsshowRT = timer.getTime()-Dotsshowstart
        Videoshowstop=timer.getTime()
        VideoshowRT=Videoshowstop- Videoshowstart

        #thisExp.addData('DotsshowRT', DotsshowRT)
        thisExp.addData('Videoshowstart', Videoshowstart)
        thisExp.addData('Videoshowstop', Videoshowstop)
        thisExp.addData('VideoshowRT', VideoshowRT)

        logged = 0

        # For Feedback Page
        if flag_5743 == True:
            if key_skip_2.keys=="space":
                feedback_txt = 'Skipped 0'
                feedback_col = [1,1,1]
                current_score = 0

            elif response_2.keys is None or len(response_2.keys) < 1:
                feedback_txt = 'Too late -2'
                feedback_col = [1.0000, -1.0000, -1.0000]
                total_score -= 2
                current_score = -2
            elif response_2.corr == 1:
                feedback_txt = 'Correct +1'
                feedback_col = [1,1,1]
                total_score += 1
                current_score = 1
            elif response_2.corr == 0:
                feedback_txt = 'Incorrect -2'
                feedback_col = [1.0000, -1.0000, -1.0000]
                total_score -= 2
                current_score = -2
    PolygonComponent polygon_2
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_2
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent dots_43
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 43
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_57
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 57
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response_2
      allowedKeys = 'right','left'
      correctAns = $correct
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Right_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Left_3
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_skip_2
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Dot_Show_5446
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # Get the value of a parameter from the loop
        #correct_answer = current_trial['correct']
        #print('correct_answer',correct_answer)

        if flag_5446 == False:
            continueRoutine = False

        # Get the duration of each loop
        Dotsshowstart=timer.getTime()
      Each Frame:
        #if response.keys == str(correct_answer) or response.keys == correct_answer:
        #     response.corr = 1
        #     continueRoutine = False
        #elif len(response.keys)>1:
        #    response.corr = -2
        #    continueRoutine = False

        if len(response_3.keys)>1:
            continueRoutine = False

        if str(expInfo['Task']) == "2 - with skip":
            if key_skip_3.keys == "space":
                continueRoutine = False

        if movie_3.status == STARTED and logged == 0:
            Videoshowstart=timer.getTime()
            logged = 1
      End Routine:
        #DotsshowRT = timer.getTime()-Dotsshowstart
        Videoshowstop=timer.getTime()
        VideoshowRT=Videoshowstop- Videoshowstart

        #thisExp.addData('DotsshowRT', DotsshowRT)
        thisExp.addData('Videoshowstart', Videoshowstart)
        thisExp.addData('Videoshowstop', Videoshowstop)
        thisExp.addData('VideoshowRT', VideoshowRT)

        logged = 0

        # For Feedback Page
        if flag_5446 == True:
            if key_skip_3.keys=="space":
                feedback_txt = 'Skipped 0'
                feedback_col = [1,1,1]
                current_score = 0
            elif response_3.keys is None or len(response_3.keys) < 1:
                feedback_txt = 'Too late -2'
                feedback_col = [1.0000, -1.0000, -1.0000]
                total_score -= 2
                current_score = -2
            elif response_3.corr == 1:
                feedback_txt = 'Correct +1'
                feedback_col = [1,1,1]
                total_score += 1
                current_score = 1
            elif response_3.corr == 0:
                feedback_txt = 'Incorrect -2'
                feedback_col = [1.0000, -1.0000, -1.0000]
                total_score -= 2
                current_score = -2
    PolygonComponent polygon_3
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_3
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent dots_46
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 46
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_54
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 54
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response_3
      allowedKeys = 'right','left'
      correctAns = $correct
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Left_4
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Right_4
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_skip_3
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Dots_Show
  Routine Fixation_2
    TextComponent fix_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if total_score > 99:
            trials.finished = True
            break

        if flag_5743 == False:
            continueRoutine = False
            trials_5743.finished = True
            break
  Routine Fixation_1
    TextComponent fix
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if total_score > 99:
            trials.finished = True
            break

        if flag_6040 == False:
            continueRoutine = False
            trials_6040.finished = True
            break
  Routine Fixation_3
    TextComponent fix_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if total_score > 99:
            trials.finished = True
            break

        if flag_5446 == False:
            continueRoutine = False
            trials_5446.finished = True
            break
  Routine Fixation_4
    TextComponent fix_5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if total_score > 99:
            trials.finished = True
            break

        if flag_5248 == False:
            continueRoutine = False
            trials_5248.finished = True
            break
  Routine screenshot_1
    ImageComponent image
      image [set every repeat] = $screenshot
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle_4
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fix_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent Right_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent Left_2
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if flag_6040 == False:
            continueRoutine = False
  Routine screenshot_2
    ImageComponent image_2
      image [set every repeat] = $screenshot
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle_6
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fix_6
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent Right_6
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent Left_6
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if flag_5743 == False:
            continueRoutine = False
  Routine screenshot_3
    ImageComponent image_3
      image [set every repeat] = $screenshot
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle_7
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fix_7
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent Right_7
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent Left_7
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if flag_5446 == False:
            continueRoutine = False
  Routine screenshot_4
    ImageComponent image_4
      image [set every repeat] = $screenshot
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle_8
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fix_8
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent Right_8
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent Left_8
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        if flag_5248 == False:
            continueRoutine = False
  Routine feedback_1
    CodeComponent code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        print('response.keys',response.keys)
        print('response.corr',response.corr)
        if response.keys is None or len(response.keys) < 1:
            feedback_txt = 'Too late -2'
            feedback_col = [0.404,-1.000,-1.000]
            total_score -= 2
        elif response.corr == 1:
            feedback_txt = 'Correct +1'
            feedback_col = [1.000,1.000,1.000]
            total_score += 1
        elif response.corr == -2:
            feedback_txt = 'Incorrect -2'
            feedback_col = [0.404,-1.000,-1.000]
            total_score -= 2

        #feedback_end = 1
    TextComponent text_3
      color [set every repeat] = $feedback_col
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_txt
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if flag_6040 == False:
            continueRoutine = False
      End Routine:
        thisExp.addData('total_score', total_score)
        thisExp.addData('Dot_ratio', '60:40')
        thisExp.addData('current_score', current_score)
  Routine feedback_2
    TextComponent text_6
      color [set every repeat] = $feedback_col
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_txt
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if flag_5743 == False:
            continueRoutine = False
      End Routine:
        thisExp.addData('total_score', total_score)
        thisExp.addData('Dot_ratio', '57:43')
        thisExp.addData('current_score', current_score)
  Routine feedback_3
    TextComponent text_7
      color [set every repeat] = $feedback_col
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_txt
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if flag_5446 == False:
            continueRoutine = False
      End Routine:
        thisExp.addData('total_score', total_score)
        thisExp.addData('Dot_ratio', '54:46')
        thisExp.addData('current_score', current_score)
  Routine feedback_4
    TextComponent text_8
      color [set every repeat] = $feedback_col
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_txt
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        if flag_5248 == False:
            continueRoutine = False
      End Routine:
        thisExp.addData('total_score', total_score)
        thisExp.addData('Dot_ratio', '52:48')
        thisExp.addData('current_score', current_score)
  Routine End
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        It is the end of the experiment.
        Thank you!
  Routine Instructions_task2
    TextComponent text_11
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Here is the instruction for the second task.

        This task is same as Task1.

        You do this task by pressing the "right arrow" (for RIGHT circle) and "left arrow" (for LEFT circle).
        If you could not decide your choice, you can press "SPACE" (for SKIP).

        Once you reach a total score of 150 points, the task is over. Each time you can earn 1 point for a correct answer. You lose 2 points for an incorrect or too late answer.
        If you skip the trial, you will not lose any point.

        Now press SPACE to start.
    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        if str(expInfo['Task']) == "1 - without skip":
            continueRoutine = False
      Each Frame:
        if key_resp_3.keys == "space":
            continueRoutine = False
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_task1
    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Here is the instruction for the first task.

        You do this task by pressing the "right arrow" (for RIGHT circle) and "left arrow" (for LEFT circle).

        You will receive feedback on your performance using points. Once you reach a total score of 150 points, the task is over. Each time you can earn 1 point for a correct answer. You lose 2 points for an incorrect or too late answer.

        In between, your total score will be given regularly.

        Now press SPACE to start.
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import time
        import sys
        from psychopy import visual,event,core
        from PIL import Image, ImageDraw
        import matplotlib.pyplot as plt
        #from pylab import *
        #import logging

        timer = core.Clock()
        total_score = 0
        feedback_txt = 0
        logged = 0

        Videoshowstart = 0
        Videoshowstop = 0

        flag_6040 = False
        flag_5743 = False
        flag_5446 = False
        flag_5248 = False
      Begin Experiment:
        if str(expInfo['Dot Ratio']) == '60:40, 57:43':
            flag_6040 = True
            flag_5743 = True
        elif  str(expInfo['Dot Ratio']) == '57:43, 54:46':
            flag_5743 = True
            flag_5446 = True
        elif  str(expInfo['Dot Ratio']) == '54:46, 52:48':
            flag_5446 = True
            flag_5248 = True
      Begin Routine:
        if str(expInfo['Task']) == "2 - with skip":
            continueRoutine = False
      Each Frame:
        if key_resp_2.keys == "space":
            continueRoutine = False
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_task2_2
  Routine General_instructions
    TextComponent text_g
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this experiment, you will be asked to do two tasks (480 tials in total).
        The intention of the both tasks is to choose the dominant color (the most presented color) in a patch of Red and Green dots, within different deadlines.
        A specific explanation is given prior to each task.

        Good luck!

        Start by pressing SPACE.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Dots_Show_5248
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        # Get the value of a parameter from the loop
        #correct_answer = current_trial['correct']
        #print('correct_answer',correct_answer)

        if flag_5248 == False:
            continueRoutine = False

        # Get the duration of each loop
        Dotsshowstart=timer.getTime()
      Each Frame:
        #if response.keys == str(correct_answer) or response.keys == correct_answer:
        #     response.corr = 1
        #     continueRoutine = False
        #elif len(response.keys)>1:
        #    response.corr = -2
        #    continueRoutine = False

        if len(response_4.keys)>1:
            continueRoutine = False

        if str(expInfo['Task']) == "2 - with skip":
            if key_skip_4.keys == "space":
                continueRoutine = False

        if movie_4.status == STARTED and logged == 0:
            Videoshowstart=timer.getTime()
            logged = 1
      End Routine:
        #DotsshowRT = timer.getTime()-Dotsshowstart
        Videoshowstop=timer.getTime()
        VideoshowRT=Videoshowstop- Videoshowstart

        #thisExp.addData('DotsshowRT', DotsshowRT)
        thisExp.addData('Videoshowstart', Videoshowstart)
        thisExp.addData('Videoshowstop', Videoshowstop)
        thisExp.addData('VideoshowRT', VideoshowRT)

        logged = 0

        # For Feedback Page
        if flag_5248 == True:
            if key_skip_4.keys=="space":
                feedback_txt = 'Skipped 0'
                feedback_col = [1,1,1]
                current_score = 0
            elif response_4.keys is None or len(response_4.keys) < 1:
                feedback_txt = 'Too late -2'
                feedback_col = [1.0000, -1.0000, -1.0000]
                total_score -= 2
                current_score = -2
            elif response_4.corr == 1:
                feedback_txt = 'Correct +1'
                feedback_col = [1,1,1]
                total_score += 1
                current_score = 1
            elif response_4.corr == 0:
                feedback_txt = 'Incorrect -2'
                feedback_col = [1.0000, -1.0000, -1.0000]
                total_score -= 2
                current_score = -2
    MovieComponent movie_4
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_5
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent dots_48
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 48
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_52
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 52
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response_4
      allowedKeys = 'right','left'
      correctAns = $correct
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Left_5
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Right_5
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_skip_4
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine General_instructions
  Routine Instructions_task1
  Routine Instructions_task2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 15
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    LoopInitiator trials_6040 loopType="TrialHandler"
      conditionsFile = $"Rewa_Sequence_" + expInfo['Deadline'] + ".xlsx"
      loopType = random
      nReps = 2
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      conditions:
        [{'Countdown': 'Countdown_2.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2s.jpg'},
        {'Countdown': 'Countdown_2.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2s.jpg'}]
      Routine Fixation_1
      Routine screenshot_1
      Routine Dots_Show_6040
      Routine feedback_1
    LoopTerminator trials_6040
    LoopInitiator trials_5743 loopType="TrialHandler"
      conditionsFile = $"Rewa_Sequence_" + expInfo['Deadline'] + ".xlsx"
      loopType = random
      nReps = 2
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      conditions:
        [{'Countdown': 'Countdown_2.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_2.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2s.jpg'}]
      Routine Fixation_2
      Routine screenshot_2
      Routine Dots_Show_5743
      Routine feedback_2
    LoopTerminator trials_5743
    LoopInitiator trials_5446 loopType="TrialHandler"
      conditionsFile = $"Rewa_Sequence_" + expInfo['Deadline'] + ".xlsx"
      loopType = random
      nReps = 2
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      conditions:
        [{'Countdown': 'Countdown_2.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_2.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2s.jpg'}]
      Routine Fixation_3
      Routine screenshot_3
      Routine Dot_Show_5446
      Routine feedback_3
    LoopTerminator trials_5446
    LoopInitiator trials_5248 loopType="TrialHandler"
      conditionsFile = $"Rewa_Sequence_" + expInfo['Deadline'] + ".xlsx"
      loopType = random
      nReps = 2
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      Routine Fixation_4
      Routine screenshot_4
      Routine Dots_Show_5248
      Routine feedback_4
    LoopTerminator trials_5248
    Routine score
  LoopTerminator trials
  Routine End
