PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Rewa's Exp
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In the next hour you will be asked to do one task. The intention is to choose the dominant color (the most presented color) in a patch of Red and Green dots, within different deadlines.
        You do this by pressing the "right arrow" (for RIGHT circle) or "left arrow" (for LEFT circle).
        There will be 324 trials in the task.

        Good luck!

        Start by pressing SPACE.
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import time
        import sys
        from psychopy import visual,event,core
        from PIL import Image, ImageDraw
        import matplotlib.pyplot as plt
        #from pylab import *
        #import logging

        timer = core.Clock()
        total_score = 0
        feedback_txt = 0

        logged = 0
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
    TextComponent fix
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine Dots_show_5743
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # Get the value of a parameter from the loop
        #correct_answer = current_trial['correct']
        #print('correct_answer',correct_answer)

        # Get the duration of each loop
        #Dotsshowstart=timer.getTime()
      Each Frame:
        #if response.keys == str(correct_answer) or response.keys == correct_answer:
        #     response.corr = 1
        #     continueRoutine = False
        #elif len(response.keys)>1:
        #    response.corr = -2
        #    continueRoutine = False

        if len(response_2.keys)>1:
            continueRoutine = False

        if movie_2.status == STARTED and logged == 0:
            Videoshowstart=timer.getTime()
            logged = 1
      End Routine:
        #DotsshowRT = timer.getTime()-Dotsshowstart
        #thisExp.addData('DotsshowRT', DotsshowRT)

        Videoshowstop=timer.getTime()
        VideoshowRT=Videoshowstop-Videoshowstart
        thisExp.addData('Videoshowstart', Videoshowstart)
        thisExp.addData('Videoshowstop', Videoshowstop)
        thisExp.addData('VideoshowRT', VideoshowRT)

        logged=0

        # For Feedback Page
        if response_2.keys is None or len(response_2.keys) < 1:
            feedback_txt = 'Too late -2'
            feedback_col = [1.0000, -1.0000, -1.0000]
            total_score -= 2
        elif response_2.corr == 1:
            feedback_txt = 'Correct +1'
            feedback_col = [1.000,1.000,1.000]
            total_score += 1
        elif response_2.corr == 0:
            feedback_txt = 'Incorrect -2'
            feedback_col = [1.0000, -1.0000, -1.0000]
            total_score -= 2
    PolygonComponent polygon_2
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_2
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent dots_43
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 43
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_57
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 57
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response_2
      allowedKeys = 'right','left'
      correctAns = $correct
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Right_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Left_3
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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  Routine Dot_show_5446
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # Get the value of a parameter from the loop
        #correct_answer = current_trial['correct']
        #print('correct_answer',correct_answer)

        # Get the duration of each loop
        #Dotsshowstart=timer.getTime()
      Each Frame:
        #if response.keys == str(correct_answer) or response.keys == correct_answer:
        #     response.corr = 1
        #     continueRoutine = False
        #elif len(response.keys)>1:
        #    response.corr = -2
        #    continueRoutine = False

        if len(response_3.keys)>1:
            continueRoutine = False

        if movie_3.status == STARTED and logged == 0:
            Videoshowstart=timer.getTime()
            logged = 1
      End Routine:
        #DotsshowRT = timer.getTime()-Dotsshowstart
        #thisExp.addData('DotsshowRT', DotsshowRT)

        Videoshowstop=timer.getTime()
        VideoshowRT=Videoshowstop-Videoshowstart
        thisExp.addData('Videoshowstart', Videoshowstart)
        thisExp.addData('Videoshowstop', Videoshowstop)
        thisExp.addData('VideoshowRT', VideoshowRT)

        logged=0

        # For Feedback Page
        if response_3.keys is None or len(response_3.keys) < 1:
            feedback_txt = 'Too late -2'
            feedback_col = [1.0000, -1.0000, -1.0000]
            total_score -= 2
        elif response_3.corr == 1:
            feedback_txt = 'Correct +1'
            feedback_col = [1.000,1.000,1.000]
            total_score += 1
        elif response_3.corr == 0:
            feedback_txt = 'Incorrect -2'
            feedback_col = [1.0000, -1.0000, -1.0000]
            total_score -= 2
    PolygonComponent polygon_3
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_3
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent dots_46
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 46
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_54
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 54
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response_3
      allowedKeys = 'right','left'
      correctAns = $correct
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Left_4
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Right_4
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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  Routine Dots_Show_6040
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Get the value of a parameter from the loop
        #correct_answer = current_trial['correct']
        #print('correct_answer',correct_answer)

        # Get the duration of each loop
        #Dotsshowstart=timer.getTime()
      Each Frame:
        #if response.keys == str(correct_answer) or response.keys == correct_answer:
        #     response.corr = 1
        #     continueRoutine = False
        #elif len(response.keys)>1:
        #    response.corr = -2
        #    continueRoutine = False

        if len(response.keys)>1:
            continueRoutine = False

        if movie.status == STARTED and logged == 0:
            Videoshowstart=timer.getTime()
            logged = 1
      End Routine:
        #DotsshowRT = timer.getTime()-Dotsshowstart
        #thisExp.addData('DotsshowRT', DotsshowRT)

        Videoshowstop=timer.getTime()
        VideoshowRT=Videoshowstop-Videoshowstart
        thisExp.addData('Videoshowstart', Videoshowstart)
        thisExp.addData('Videoshowstop', Videoshowstop)
        thisExp.addData('VideoshowRT', VideoshowRT)

        logged=0


        # For Feedback Page
        if response.keys is None or len(response.keys) < 1:
            feedback_txt = 'Too late -2'
            feedback_col = [1.0000, -1.0000, -1.0000]
            total_score -= 2
        elif response.corr == 1:
            feedback_txt = 'Correct +1'
            feedback_col = [1.000,1.000,1.000]
            total_score += 1
        elif response.corr == 0:
            feedback_txt = 'Incorrect -2'
            feedback_col = [1.0000, -1.0000, -1.0000]
            total_score -= 2
    PolygonComponent polygon
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent dots_60
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 60
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_40
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 40
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys = 'right','left'
      correctAns = $correct
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Right
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Left
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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  Routine feedback_1
    CodeComponent code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        print('response.keys',response.keys)
        print('response.corr',response.corr)
        if response.keys is None or len(response.keys) < 1:
            feedback_txt = 'Too late -2'
            feedback_col = [0.404,-1.000,-1.000]
            total_score -= 2
        elif response.corr == 1:
            feedback_txt = 'Correct +1'
            feedback_col = [1.000,1.000,1.000]
            total_score += 1
        elif response.corr == -2:
            feedback_txt = 'Incorrect -2'
            feedback_col = [0.404,-1.000,-1.000]
            total_score -= 2

        #feedback_end = 1
    TextComponent text_3
      color [set every repeat] = $feedback_col
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_txt
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('total_score', total_score)
  Routine score
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $total_score
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    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        text_2.text = str(total_score)
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Your total score is: 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Press Space bar to continue
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  Routine screenshot
    ImageComponent image
      image [set every repeat] = $screenshot
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle_4
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fix_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent Right_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent Left_2
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine output
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        from excel_analyser_rewa import *

        result=''

        try:
            result = analyze_excel_data()

        except:
            pass
      Each Frame:
        text_4.text = str(result)
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine output_2
  Routine end
    TextComponent end_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        It is the end of the experiment.
        Thank you!
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 18
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    LoopInitiator trials_6040 loopType="TrialHandler"
      conditionsFile = Rewa_Sequence.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Countdown': 'Countdown_2.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_2.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2s.jpg'}]
      Routine Fixation
      Routine screenshot
      Routine Dots_Show_6040
      Routine feedback_1
    LoopTerminator trials_6040
    LoopInitiator trials_5743 loopType="TrialHandler"
      conditionsFile = Rewa_Sequence.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Countdown': 'Countdown_2.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_2.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2s.jpg'}]
      Routine Fixation
      Routine screenshot
      Routine Dots_show_5743
      Routine feedback_1
    LoopTerminator trials_5743
    LoopInitiator trials_5446 loopType="TrialHandler"
      conditionsFile = Rewa_Sequence.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine Fixation
      Routine screenshot
      Routine Dot_show_5446
      Routine feedback_1
    LoopTerminator trials_5446
    Routine score
  LoopTerminator trials
  Routine end
