PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Rewa's Exp
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import time
        import sys
        from psychopy import visual,event,core
        from PIL import Image, ImageDraw
        import matplotlib.pyplot as plt
        #from pylab import *
        #import logging

        timer = core.Clock()
        total_score = 0
        feedback_txt = 0
  Routine Fixation
    TextComponent fix
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine Dots_show_5743
    PolygonComponent polygon_2
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_2
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent red_dots_2
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 43
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent green_dots_2
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 57
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent Right_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Left_3
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (-550, 0)
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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  Routine Dot_show_5446
    PolygonComponent polygon_3
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_3
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent red_dots_3
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 43
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent green_dots_3
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 57
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent Left_4
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Right_4
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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  Routine Dots_Show_6040
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        current_trial = trials_6040.trialList[trials_6040.thisN]

        # Get the value of a parameter from the loop
        #correct_answer = current_trial['correct']
        #print('correct_answer',correct_answer)

        # Get the duration of each loop
        Dotsshowstart=timer.getTime()
      Each Frame:
        #if response.keys == str(correct_answer) or response.keys == correct_answer:
        #     response.corr = 1
        #     continueRoutine = False
        #elif len(response.keys)>1:
        #    response.corr = -2
        #    continueRoutine = False

        if len(response.keys)>1:
            continueRoutine = False

        #if response.corr == 1
        print('response.corr',response.corr)
      End Routine:
        DotsshowRT = timer.getTime()-Dotsshowstart
        thisExp.addData('DotsshowRT', DotsshowRT)

        # For Feedback Page
        if response.keys is None or len(response.keys) < 1:
            feedback_txt = 'Too late -2'
            feedback_col = [0.404,-1.000,-1.000]
            total_score -= 2
        elif response.corr == 1:
            feedback_txt = 'Correct +1'
            feedback_col = [1.000,1.000,1.000]
            total_score += 1
        elif response.corr == 0:
            feedback_txt = 'Incorrect -2'
            feedback_col = [0.404,-1.000,-1.000]
            total_score -= 2
    PolygonComponent polygon
      anchor = center-left
      fillColor = gray
      ori = 45
      pos = (0.1275, 0.1275)
      saveStartStop = False
      shape = rectangle
      size = (0.255, 0.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Countdown
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
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    PolygonComponent circle
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    DotsComponent dots_60
      coherence = 0
      color [set every repeat] = $color1
      dir = 0
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 60
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_40
      coherence = 0
      color [set every repeat] = $color2
      dir = 0
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.58
      nDots = 10
      noiseDots = walk
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys = 'right','left'
      correctAns = $correct
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Right
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Left
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      units = pix
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  Routine feedback_1
    CodeComponent code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        print('response.keys',response.keys)
        print('response.corr',response.corr)
        if response.keys is None or len(response.keys) < 1:
            feedback_txt = 'Too late -2'
            feedback_col = [0.404,-1.000,-1.000]
            total_score -= 2
        elif response.corr == 1:
            feedback_txt = 'Correct +1'
            feedback_col = [1.000,1.000,1.000]
            total_score += 1
        elif response.corr == -2:
            feedback_txt = 'Incorrect -2'
            feedback_col = [0.404,-1.000,-1.000]
            total_score -= 2

        #feedback_end = 1
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_txt
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('total_score', total_score)
  Routine score
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $total_score
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  Routine screenshot
    ImageComponent image
      image [set every repeat] = $screenshot
      saveStartStop = False
      size = (1.92, 1.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle_4
      fillColor = black
      lineColor = black
      lineWidth = 10
      nVertices = 500
      saveStartStop = False
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fix_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent Right_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (550, 0)
      saveStartStop = False
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent Left_2
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (-550, 0)
      saveStartStop = False
      shape = circle
      size = (150,150)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 18
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    LoopInitiator trials_6040 loopType="TrialHandler"
      conditionsFile = Rewa_Sequence.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Countdown': 'Countdown_2.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_2.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2s.jpg'}]
      Routine Fixation
      Routine screenshot
      Routine Dots_Show_6040
      Routine feedback_1
    LoopTerminator trials_6040
    LoopInitiator trials_5743 loopType="TrialHandler"
      conditionsFile = Rewa_Sequence.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Countdown': 'Countdown_2.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2.5s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_2s.jpg'},
        {'Countdown': 'Countdown_2s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_2s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'red', 'color2': 'green', 'correct': 'right', 'screenshot': 'Countdown_1.5s.jpg'},
        {'Countdown': 'Countdown_1.5s.mp4', 'color1': 'green', 'color2': 'red', 'correct': 'left', 'screenshot': 'Countdown_1.5s.jpg'}]
      Routine Fixation
      Routine screenshot
      Routine Dots_show_5743
      Routine feedback_1
    LoopTerminator trials_5743
    LoopInitiator trials_5446 loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine Fixation
      Routine screenshot
      Routine Dot_show_5446
      Routine feedback_1
    LoopTerminator trials_5446
    Routine score
  LoopTerminator trials
